PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '999', 'session': '001'}
  Full-screen window = True
  Monitor = Default
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  expName = RSVPLG
  keyboardBackend = ioHub
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Routines
  Routine rsvp_stream
    CodeComponent rsvpController
      Code Type = Py
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      Each Frame:
        #if rsvp_frame < n_rsvp_frames
        if rsvp_status == RSVP_STIM_START and core.getTime() >= next_event_time:
            # at the start of each stim
            print('started frame %d at %f' % (rsvp_frame, win.lastFrameT))
            rsvp_status = RSVP_STIM_END
            next_event_time = win.lastFrameT + stim_duration
        elif rsvp_status == RSVP_STIM_END and core.getTime() >= next_event_time:
            # end of each stim
            for i in range(len(local_letter_stim)):
                local_letter_stim[i].setAutoDraw(False)
            rsvp_status = RSVP_ISI_START
            print('ended frame %d at %f' % (rsvp_frame, core.getTime()))
            # don't reset time so we switch to the next step on the next loop
        elif rsvp_status == RSVP_ISI_START and core.getTime() >= next_event_time:
            # start of each ISI, stim are invisible so set up for next stim
            print('starting ISI after frame %d at %f' % (rsvp_frame, core.getTime()))
            rsvp_frame += 1
            if rsvp_frame < n_rsvp_frames:
                frame_global_letter = stream_global_letters[rsvp_frame]
                frame_local_letter = stream_local_letters[rsvp_frame]
                local_letter_pos = navon_letters[frame_global_letter].GetPositions()
                responses = navon_letters[frame_global_letter].GetResponses()
                for i in range(len(local_letter_pos)):
                    local_letter_stim[i].setPos(local_letter_pos[i])
                    local_letter_stim[i].setText(frame_local_letter)
                    local_letter_stim[i].setColor(stream_colors[rsvp_frame])
                rsvp_status = RSVP_ISI_END
            else:
                rsvp_status = RSVP_DONE
            next_event_time = win.lastFrameT + isi_duration
        elif rsvp_status == RSVP_ISI_END and core.getTime() >= next_event_time:
            # at the end of each ISI
            print('ending ISI beforeframe %d at %f' % (rsvp_frame, core.getTime()))
            for i in range(len(local_letter_pos)):
                local_letter_stim[i].setAutoDraw(True)
            rsvp_status = RSVP_STIM_START
            # don't reset time so we switch to the next step on the next loop
        elif rsvp_status == RSVP_DONE and core.getTime() >= next_event_time:
            print('Finishing at %f after %d stimuli' % (core.getTime(), rsvp_frame))
            continueRoutine = False
    TextComponent stim1
      letterHeight = .1
      opacity = 0
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  Routine start_experiment
    CodeComponent experiment_setup
      Code Type = Py
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      Before Experiment:
        from math import floor

        # define stimuli and stream characteristics
        letters = ['E', 'F', 'H', 'L', 'N', 'S', 'T',
                   'U', 'Y', 'Z']
        t2letter = 'X'
        t1pos_list = [3, 4, 5] # specified in frames not array index
        t2lag_list = [2, 3, 4] # lag of 1 would be right after T1
        global_local_list = ['global', 'local']

        # constants for managing RSVP stream
        RSVP_STIM_START = 0
        RSVP_STIM_END = 1
        RSVP_ISI_START = 2
        RSVP_ISI_END = 3
        RSVP_DONE = 4

        # random number generator
        rng = np.random.default_rng()
    CodeComponent stim_setup
      Code Type = Py
      Begin Experiment:
        # timing
        stim_duration = 10 * 1/60
        isi_duration = 10 * 1/60

        # set up Navon letters
        localHeight = .02
        localWidth = .015
        globalHeight = .25 # originally .2
        globalWidth = .2 # originally .15
        nY = 9
        localHeight = globalHeight/nY

        class NavonLetter:
            def __init__(self, letter, responses, positions):
                self.name = letter
                self.responses = responses
                self.pos = positions

            def GetName(self):
                return self.name

            def GetResponses(self):
                return self.responses

            def GetPositions(self):
                return self.pos

            def PositionLength(self):
                return len(self.pos)

        navon_letters = dict()

        name = 'A'
        responses = ['a','A']
        positions = []
        for Idx in range(0,nY):
            positions.append([(1+Idx-nY)/2/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(0,nY-1):
            positions.append([-(1+Idx-nY)/2/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(int(nY/3),nY-int(nY/3)):
            positions.append([(.5+Idx-nY/2)/(nY-3)*globalWidth,-globalHeight/6])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'C'
        responses = ['c','C']
        positions = []
        for Idx in range(nY):
            positions.append([-sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(1,int(nY/3)):
            positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(int(2*nY/3),nY-1):
            positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        Idx = .25
        positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        positions.append([-sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,-(1+Idx-nY/2)/nY*globalHeight])
        positions.append([-sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,-(1+Idx-nY/2)/nY*globalHeight])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'D'
        responses = ['d','D']
        positions = []
        for Idx in range(nY):
            positions.append([-globalWidth/2,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(1,floor(nY/2)):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,globalHeight/2-localHeight])
        for Idx in range(1,floor(nY/2)):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,-globalHeight/2])
        for Idx in range(0,nY):
            positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        Idx = .25
        positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,-(1+Idx-nY/2)/nY*globalHeight])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'E'
        responses = ['e','E']
        positions = []
        for Idx in range(nY):
            positions.append([-globalWidth/2,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(1,nY):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,globalHeight/2-localHeight])
        for Idx in range(1,nY-1):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,-localHeight/2])
        for Idx in range(1,nY):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,-globalHeight/2])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'F'
        responses = ['f','F']
        positions = []
        for Idx in range(nY):
            positions.append([-globalWidth/2,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(1,nY):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,globalHeight/2-localHeight])
        for Idx in range(1,nY-2):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,-localHeight/2])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'H'
        responses = ['h','H']
        positions = []
        for Idx in range(nY):
            positions.append([-globalWidth/2,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(1,nY-1):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,-localHeight/2])
        for Idx in range(nY):
            positions.append([globalWidth/2,(Idx-nY/2)/nY*globalHeight])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'L'
        responses = ['l','L']
        positions = []
        for Idx in range(nY):
            positions.append([-globalWidth/2,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(1,nY):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,-globalHeight/2])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'M'
        responses = ['m','M']
        positions = []
        for Idx in range(nY):
            positions.append([-globalWidth/2-globalWidth/2/nY,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(0,nY-1):
            positions.append([Idx/2/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(1,nY-1):
            positions.append([-Idx/2/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(nY):
            positions.append([globalWidth/2+globalWidth/2/nY,(Idx-nY/2)/nY*globalHeight])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'N'
        responses = ['n','N']
        positions = []
        for Idx in range(nY):
            positions.append([-globalWidth/2,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(1,nY-1):
            positions.append([-(.5+Idx-nY/2)/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(nY):
            positions.append([globalWidth/2,(Idx-nY/2)/nY*globalHeight])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'O'
        responses = ['o','O']
        positions = []
        for Idx in range(0,nY):
            positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(nY-1):
            positions.append([-sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        Idx = .25
        positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        positions.append([-sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        positions.append([sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,-(1+Idx-nY/2)/nY*globalHeight])
        positions.append([-sqrt(.25-((.5+Idx-nY/2)/(nY-1))**2)*globalWidth,-(1+Idx-nY/2)/nY*globalHeight])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'T'
        responses = ['t','T']
        positions = []
        for Idx in range(nY):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,globalHeight/2-localHeight])
        for Idx in range(nY-1):
            positions.append([0,(Idx-nY/2)/nY*globalHeight])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'V'
        responses = ['v','V']
        positions = []
        for Idx in range(0,nY):
            positions.append([Idx/2/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(1,nY):
            positions.append([-Idx/2/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        navon_letters[name] = NavonLetter(name, responses, positions)

        name = 'X'
        responses = ['x','X']
        positions = []
        for Idx in range(0,nY):
            positions.append([-(.5+Idx-nY/2)/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        for Idx in range(0,nY):
            positions.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        navon_letters[name] = NavonLetter(name, responses, positions)


        longestN = 0
        longestLetter = ''
        allowed_response_list = []
        for k in iter(navon_letters):
            n = navon_letters[k].PositionLength()
            if n > longestN:
                longestN = n
                longestLetter = k
            allowed_response_list.extend(navon_letters[k].GetResponses())
        print('longest letter is \"%s\" with %d positions' % (longestLetter, longestN))
        print(allowed_response_list)

        letters = ''.join(list(navon_letters))
        print(letters)

        local_letter_stim = list()
        for i in range(longestN):
            local_letter_stim.append(visual.TextBox2(
                win=win, name='local%02d' % i,
                text='+', pos=[0, 0],
                font='Arial', letterHeight=localHeight,
                alignment='center', bold=True,
                color='red', opacity=1,
                autoDraw=False))

        # letterX = ['x','X']
        # for Idx in range(0,nY):
        #     letterX.append([-(.5+Idx-nY/2)/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])
        # for Idx in range(0,nY):
        #     letterX.append([(.5+Idx-nY/2)/(nY-1)*globalWidth,(Idx-nY/2)/nY*globalHeight])

        # elementX = visual.TextStim(
        #     win=win, name='elementX',
        #     text='Q', font='Arial',
        #     pos=
  Routine start_trial
    CodeComponent trial_setup
      Code Type = Py
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      Begin Routine:
        # trial setup code
        n_rsvp_frames = 9
        t1pos = rng.choice(t1pos_list)
        t2lag = rng.choice(t2lag_list)
        stream_global_letters = list(navon_letters)
        stream_local_letters = stream_global_letters.copy()
        shuffle(stream_global_letters)
        shuffle(stream_local_letters)
        stream_global_letters = stream_global_letters[0:n_rsvp_frames]
        stream_local_letters = stream_local_letters[0:n_rsvp_frames]
        print(stream_global_letters)
        print(stream_local_letters)
        stream_colors = ['black'] * n_rsvp_frames
        stream_colors[t1pos - 1] = 'white'
        t1_status = rng.choice(global_local_list)
        if t1_status == 'local':
            print('T1 local')
            t1_status_plural = 's'
            t1_status_verb = 'were'
            correct_t1_response = navon_letters[stream_local_letters[t1pos-1]].GetResponses()
        else:
            print ('T1 global')
            t1_status_plural = ''
            t1_status_verb = 'was'
            correct_t1_response = navon_letters[stream_global_letters[t1pos-1]].GetResponses()
        trials.addData('globalLetters', ''.join(stream_global_letters))
        trials.addData('localLetters', ''.join(stream_local_letters))
        trials.addData('t1global', stream_global_letters[t1pos-1])
        trials.addData('t1local', stream_local_letters[t1pos-1])
        trials.addData('t1pos', t1pos)
        trials.addData('t1status', t1_status)

        rsvp_frame = -1
        rsvp_status = RSVP_ISI_START
        next_event_time = core.getTime() # start ISI now
        print('started at %f' % (core.getTime()))
        print(correct_t1_response)
    TextboxComponent trial_cue
      bold = False
      color = black
      editable = False
      letterHeight = 0.025
      lineSpacing = 1.5
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Report the ' + t1_status + ' letter' + t1_status_plural + '\nof the white stimulus\n\nPress any key to begin trial'
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    KeyboardComponent trial_cue_response
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_fixation
    TextComponent fixation
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine t1_response
    TextboxComponent t1_response_prompt
      bold = False
      color = black
      editable = False
      letterHeight = 0.025
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'What ' + t1_status_verb + ' the ' + t1_status + ' letter' + t1_status_plural + ' in the white stimulus?\n\nType your answer\n(don\'t worry about upper or lower case)'
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    KeyboardComponent t1_response_entry
      allowedKeys [set every repeat] = allowed_response_list
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent process_t1_response
      Code Type = Py
      End Routine:
        if len(t1_response_entry.keys) != 1:
            # no response or multiple responses
            correct = -1
            feedback_text = 'BAD RESPONSE'
            feedback_color = 'yellow'
        elif t1_response_entry.keys in correct_t1_response:
            # response is in list of possible correct responses
            correct = 1
            feedback_text = 'CORRECT'
            feedback_color = 'green'
        else:
            # incorrect response
            correct = 0
            feedback_text = 'ERROR'
            feedback_color = 'red'

        trials.addData('t1acc', correct)
  Routine t1_feedback
    TextboxComponent feedback
      bold = False
      color [set every repeat] = $feedback_color
      editable = False
      letterHeight = 0.03
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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Flow
  Routine start_experiment
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine start_trial
    Routine trial_fixation
    Routine rsvp_stream
    Routine t1_response
    Routine t1_feedback
  LoopTerminator trials
